PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = FFMQ
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Welcome
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    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Te damos la bienvenida.

        En seguida te presentaremos una encuesta relacionada a atencion. Esta consta de 39 preguntas.

        Elije la alternativa que mejor refleje el grado en que estás de acuerdo con cada uno de los enunciados que se indican a continuación. Cuando estés listo/a presiona la barra espaciadora para continuar.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    SliderComponent slider_1
      forceEndRoutine = False
      granularity = 1
      labels = ["Nunca o muy raramente cierto", "Raramente cierto", "Algunas veces cierto", "A menudo cierto", "Muy a menudo o siempre cierto"] 
      letterHeight = 0.02
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{question_number}: {question_text}"
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    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Este es el final del questionario.

        ¡Gracias por participar!
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('question_number', 1), ('question_text', 'Cuando camino noto deliberadamente las sensaciones de mi cuerpo al moverse.')]),
      OrderedDict([('question_number', 2), ('question_text', 'Se me da bien encontrar las palabras para describir mis sentimientos.')]),
      OrderedDict([('question_number', 3), ('question_text', 'Me critico a mi mismo/a por tener emociones irracionales o inapropiadas.')]),
      OrderedDict([('question_number', 4), ('question_text', 'Percibo mis sentimientos y emociones sin tener que reaccionar a ellos.')]),
      OrderedDict([('question_number', 5), ('question_text', 'Cuando hago algo mi mente divaga y me distraigo fácilmente.')]),
      OrderedDict([('question_number', 6), ('question_text', 'Cuando me ducho o me baño estoy atento a las sensaciones del agua en mi cuerpo.')]),
      OrderedDict([('question_number', 7), ('question_text', 'Con facilidad puedo poner en palabras mis creencias sentimientos y expectativas.')]),
      OrderedDict([('question_number', 8), ('question_text', 'No presto atención a lo que hago porque sueño despierto porque me preocupo o porque me distraigo.')]),
      OrderedDict([('question_number', 9), ('question_text', 'Observo mis sentimientos sin perderme en ellos.')]),
      OrderedDict([('question_number', 10), ('question_text', 'Me digo a mi mismo/a que no debería sentir lo que siento.')]),
      OrderedDict([('question_number', 11), ('question_text', 'Noto cómo los alimentos y las bebidas afectan a mis pensamientos sensaciones corporales y emociones.')])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
    Routine trial
  LoopTerminator trials
  Routine End
